PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['Subject'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Version': u'1A', u'Subject': u'SocaME999'}
  expName = SocaMotiveAdult_Encoding
  Units = use prefs
  Screen = 1
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Routines
  Routine Slow
    TextComponent slowText
      text = Too Slow!
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent slowCode
      Each Frame:
        if Prediction_Response.keys:
            continueRoutine=False
            ensureResponse.finished=True
  Routine Cross
    TextComponent fix
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine Delay
    ImageComponent delay
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size [set every repeat] = [676,777]
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    TextComponent delayText
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Cue
    ImageComponent peerPhotoCue
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Prediction_Response
      stopVal [time (s)] = 3.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.5
      store = first key
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    CodeComponent code
      Begin Experiment:
        allowable_keys = {
            '1': 'Yes',
            '2': 'No'
        }
      Begin Routine:
        responseMsg = ''
      Each Frame:
        if Prediction_Response.keys:
            responseMsg = allowable_keys[Prediction_Response.keys]
    TextComponent PredictText
      text [set every frame] = $responseMsg
      stopVal [time (s)] = 3.0
      pos = [-0.70, 0]
      startVal [time (s)] = .5
      letterHeight = .2
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  Routine Motvation
    ImageComponent motivePhoto
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [675,776]
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    TextComponent motiveText
      text [set every repeat] = $responseMsg
      stopVal [time (s)] = 2.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine RunDir
    TextComponent text
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have completed Run 1.

        You are free to take a break!




        If you are ready to proceed to the next run, please press either key.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine Feedback4
    ImageComponent image_7
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Run4EvalRT
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent text_17
      text [set every repeat] = $Eval
      stopVal [duration (s)] = 2.0
      pos = [0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_18
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 2.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Feedback2
    ImageComponent image
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Run2EvalRT
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent text_8
      text [set every repeat] = $Eval
      stopVal [duration (s)] = 2.0
      pos = [0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_9
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 2.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Feedback3
    ImageComponent image_5
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Run3EvalRT
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent text_12
      text [set every repeat] = $Eval
      stopVal [duration (s)] = 2.0
      pos = [0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_13
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 2.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Instructions
    TextComponent InstrText
      wrapWidth = 1.6
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Welcome to the First Impressions Task!

        Participants at other study sites rated whether they liked you based on your picture.

        During this task, your job is to guess whether or not the other person liked you. After that, you will be shown whether they actually liked you. Then you must press any button to confirm you've seen what they said.




        Press either key to begin.
    KeyboardComponent InstrContinue
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Cue4
    ImageComponent image_3
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Prediction_Response4
      stopVal [time (s)] = 3.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.5
      store = first key
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    CodeComponent code_4
      Begin Routine:
        responseMsg=''
      Each Frame:
        if Prediction_Response4.keys:
            responseMsg = allowable_keys[Prediction_Response4.keys]
    TextComponent text_5
      text [set every frame] = $responseMsg
      stopVal [time (s)] = 3.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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  Routine Cue3
    ImageComponent image_2
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Prediction_Response3
      stopVal [time (s)] = 3.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.5
      store = first key
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    CodeComponent code_3
      Begin Routine:
        responseMsg=''
      Each Frame:
        if Prediction_Response3.keys:
            responseMsg = allowable_keys[Prediction_Response3.keys]
    TextComponent text_4
      text [set every frame] = $responseMsg
      stopVal [time (s)] = 3.0
      pos = [-0.7, 0]
      startVal [time (s)] = .5
      letterHeight = 0.2
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  Routine Cue2
    ImageComponent peerPhotoCue2
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Prediction_Response2
      stopVal [time (s)] = 3.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.5
      store = first key
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    CodeComponent code_2
      Begin Routine:
        responseMsg = ''
      Each Frame:
        if Prediction_Response2.keys:
            responseMsg = allowable_keys[Prediction_Response2.keys]
    TextComponent text_3
      text [set every frame] = $responseMsg
      stopVal [time (s)] = 3.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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  Routine Delay3
    ImageComponent image_4
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    TextComponent text_11
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 1.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Delay2
    ImageComponent delayCue
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    TextComponent text_7
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 1.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Delay4
    ImageComponent image_6
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    TextComponent text_16
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 1.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Delay_3
  Routine Delay_2
  Routine RunDir3
    TextComponent text_14
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have completed Run 3.

        You are free to take a break!




        If you are ready to proceed to the last run, please press either key.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine RunDir2
    TextComponent text_2
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have completed Run 2.

        You are free to take a break!




        If you are ready to proceed to the next run, please press either key.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine Slow2
    TextComponent text_6
      text = Too Slow!
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_5
      Each Frame:
        if Prediction_Response2.keys:
            continueRoutine=False
            ensureResponse2.finished=True
  Routine Slow3
    TextComponent text_10
      text = Too Slow!
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_6
      Each Frame:
        if Prediction_Response3.keys:
            continueRoutine=False
            ensureResponse3.finished=True
  Routine Slow4
    TextComponent text_15
      text = Too Slow!
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_7
      Each Frame:
        if Prediction_Response4.keys:
            continueRoutine=False
            ensureResponse4.finished=True
  Routine Feedback
    ImageComponent PeerPhotoFeedback
      stopVal [time (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size [set every repeat] = [676,777]
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    KeyboardComponent Run1EvalRT
      correctAns = $CorrAns
      stopVal [time (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent peerEval
      text [set every repeat] = $Eval
      stopVal [duration (s)] = 2.0
      pos = [.70, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent predictText
      text [set every repeat] = $responseMsg
      stopVal [time (s)] = 2.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $_thisDir + os.sep + 'conditions/SocaMotiveConditions_Encode_Version%s_Run1.xlsx' %(expInfo['Version'])
    loopType = random
    nReps = 1
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    LoopInitiator ensureResponse loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Cue
      Routine Slow
    LoopTerminator ensureResponse
    Routine Delay
    Routine Feedback
    Routine Cross
  LoopTerminator trials
  Routine RunDir
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $_thisDir + os.sep + 'conditions/SocaMotiveConditions_Encode_Version%s_Run2.xlsx' %(expInfo['Version'])
    loopType = random
    nReps = 1
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    LoopInitiator ensureResponse2 loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Cue2
      Routine Slow2
    LoopTerminator ensureResponse2
    Routine Delay2
    Routine Feedback2
    Routine Cross
  LoopTerminator trials_2
  Routine RunDir2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = $_thisDir + os.sep + 'conditions/SocaMotiveConditions_Encode_Version%s_Run3.xlsx' %(expInfo['Version'])
    loopType = random
    nReps = 1
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    LoopInitiator ensureResponse3 loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Cue3
      Routine Slow3
    LoopTerminator ensureResponse3
    Routine Delay3
    Routine Feedback3
    Routine Cross
  LoopTerminator trials_3
  Routine RunDir3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = $_thisDir + os.sep + 'conditions/SocaMotiveConditions_Encode_Version%s_Run4.xlsx' %(expInfo['Version'])
    loopType = random
    nReps = 1
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    LoopInitiator ensureResponse4 loopType="TrialHandler"
      loopType = sequential
      nReps = 3
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      Routine Cue4
      Routine Slow4
    LoopTerminator ensureResponse4
    Routine Delay4
    Routine Feedback4
    Routine Cross
  LoopTerminator trials_4
