PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'Version': u'1A', u'Subject': u'999'}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s_%s' %(expInfo['Subject'], expName, expInfo['date'], expInfo['Version'])
  expName = SocaMotivePractice
  Screen = 1
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Routines
  Routine Motivation2
    ImageComponent MotiveCue
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    TextComponent MotiveText2
      text [set every repeat] = $responseMsgMotive
      stopVal [duration (s)] = 1.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 1.0
      pos = [-0.7, 0]
      startVal [condition] = $t>=0 and Prediction=='False'
      nVertices = 90
      size = [0.25, 0.25]
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  Routine Slow
    TextComponent slowText
      text = Too Slow!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent slowCode
      Each Frame:
        if Prediction_Response.keys:
            continueRoutine=False
            ensureResponse.finished=True
  Routine FastCue
    ImageComponent FastPhotoCue
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $CueFast
      size = [675,776]
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    KeyboardComponent Fast_Pred_Response
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    CodeComponent fastCueCode
      Begin Routine:
        responseFast = ''
      Each Frame:
        if Fast_Pred_Response.keys:
            responseFast = allowable_keys[Fast_Pred_Response.keys]
    TextComponent FastCuePrediction
      text [set every frame] = $responseFast
      stopVal [duration (s)] = 2.0
      pos = [-.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine FdbkDir
    TextComponent text_4
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.09
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      text:
        After you make your prediction, you will be told whether the other person rated you highly.

        A 'Yes' or a 'No' will be displayed on the right side of the screen, indicating whether or not that person rated you highly.

        As soon as you see the Yes or No displayed, press 1 or 2 to confirm the rating you just received. Press 1 for a 'Yes' or 2 for a 'No'.

        Let's practice that now with some more cartoons. Just like before, start by making prediction.



        Press the space bar when you are ready to continue.
    KeyboardComponent goOn
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Cross
    TextComponent fix
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine Delay
    ImageComponent delay
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = /Users/arodman/Desktop/SandBox/stim/Delay.jpg
      size [set every repeat] = [675,776.25]
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    TextComponent delayText
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 3.0
      pos [set every repeat] = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine Cue
    ImageComponent peerPhotoCue
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent Prediction_Response
      stopVal [time (s)] = 3.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.25
      store = first key
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    CodeComponent code
      Begin Experiment:
        allowable_keys = {
            '1': 'Yes',
            '2': 'No'
        }
      Begin Routine:
        responseMsg = ''
      Each Frame:
        if Prediction_Response.keys:
            responseMsg = allowable_keys[Prediction_Response.keys]
    TextComponent PredictText
      text [set every frame] = $responseMsg
      stopVal [duration (s)] = 3.0
      pos = [-0.70, 0]
      startVal [time (s)] = 0
      letterHeight = .2
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    TextComponent text_41
      text = (Make a guess)
      stopVal [duration (s)] = 3.0
      pos = [-0.7, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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  Routine go
    TextComponent text_31
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, let's try a practice round.





        Press 'Yes' to continue.
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine FdbkTrial
    ImageComponent FdbkPracCue
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = stim/Smile_1.jpg
      size = [675, 776]
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    TextComponent DirTop
      wrapWidth = 1.5
      text = Guess whether this person liked you.
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Routine:
        predictionFdbk=''
      Each Frame:
        if PredictFdbk.keys:
            predictionFdbk = allowable_keys[PredictFdbk.keys]
    KeyboardComponent PredictFdbk
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent DisplayPredict
      text [set every frame] = $predictionFdbk
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_5
      text = Press the space bar to continue
      pos = [0, -0.7]
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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  Routine PracticeDirections
    TextComponent text_3
      wrapWidth = 2.0
      text = First, you'll see a picture of another participant.
      stopVal [duration (s)] = 5.0
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    ImageComponent scalePic
      pos = [0, -75]
      units = pix
      startVal [time (s)] = 3.0
      image [set every repeat] = stim/Smile_1.jpg
      size = [506,582]
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    TextComponent moreDirections
      wrapWidth = 1.7
      stopVal [time (s)] = 11
      pos = [-.7,0.5]
      startVal [time (s)] = 5
      letterHeight = 0.07
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      text:
        Then, you'll guess whether they
        liked you by pressing Yes or No.
    TextComponent text_17
      text = Yes
      pos = [-.7, 0]
      startVal [time (s)] = 9
      letterHeight = 0.2
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    TextComponent text_37
      text = (Your guess)
      pos = [-0.7, -0.2]
      startVal [time (s)] = 9
      letterHeight = 0.06
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    TextComponent text_15
      stopVal [time (s)] = 17
      pos = [0.7, 0.5]
      startVal [time (s)] = 11
      letterHeight = 0.07
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      text:
        After that, you will be shown
        what they said.
    TextComponent text_18
      text = Yes
      pos = [0.7, 0]
      startVal [time (s)] = 14
      letterHeight = 0.2
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    TextComponent text_38
      text = (What they said)
      pos = [0.7, -0.2]
      startVal [time (s)] = 14
      letterHeight = 0.06
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    KeyboardComponent understand
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 22
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    TextComponent text_23
      wrapWidth = 1.5
      startVal [time (s)] = 23
      letterHeight = 0.1
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      text:
        Do you have any questions?













        Press 'Yes' to continue.
  Routine TrialPrac
    ImageComponent image
      units = pix
      startVal [time (s)] = 0.0
      image = stim/Smile_4.jpg
      size = [675,776]
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    TextComponent pracInstr
      wrapWidth = 1.5
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        What about this person?

        For practice, press 2 and indicate NO.
    KeyboardComponent Practice_Response2
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent text
      wrapWidth = 1.5
      text = Press the space bar to move on
      pos = [0, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      Begin Routine:
        practiceRsp2=''
      Each Frame:
        if Practice_Response2.keys:
            practiceRsp2 = allowable_keys[Practice_Response2.keys]
    TextComponent pracRsp2
      text [set every frame] = $practiceRsp2
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent conttinue
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine AllInstructions
    TextComponent text_13
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, let's do one last practice.

        This time, you will not have directions as you go along, so make sure to begin by making a guess.

        If you do not make a guess in the alotted time, you will be shown a circle for your prediction. You will not be shown what your peer said about you, and you will be shown a circle instead.


        Press 'Yes' to continue.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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  Routine PracSlow
    TextComponent slowTextPrac
      text = Too Slow!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent slowCodePrac
      Each Frame:
        if Fast_Pred_Response.keys:
            continueRoutine=False
            ensureResponseFast.finished=True
  Routine PreFullDir
    TextComponent text_2
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Now, we are going to try the same thing, only this time it will be a little faster. You will have two seconds to make your prediction.







        Press the space bar to continue.
    KeyboardComponent cont2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine MoneyDirections
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_12
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        During the task, you also have a few chances to win bonus money.

        On these trials, all you have to do is squeeze the gripper as hard as you can to win money.





        Press the space bar to practice.
  Routine FeedbackDisplay
    CodeComponent code_5
      Begin Routine:
        predictionFdbk = allowable_keys[PredictFdbk.keys]
    ImageComponent image_2
      units = pix
      startVal [time (s)] = 0.0
      image = stim/Smile_1.jpg
      size = [675, 776]
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    TextComponent PredDisplay
      text [set every repeat] = $predictionFdbk
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent DirTopNow
      wrapWidth = 1.5
      text = Now tell us whether or not you were liked.
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent FdbkConfirm
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent fdbkText
      text = Yes
      pos = [0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent corrAns
      text [set every frame] = $correct
      pos = [0, -0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_6
      Begin Routine:
        correct=''
      Each Frame:
        if FdbkConfirm.keys=='1':
            correct='Correct!'
    TextComponent text_6
      text = press the spacebar to continue
      pos = [0, -.85]
      startVal [time (s)] = 5.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Feedback2
    ImageComponent cueFdbk
      stopVal [duration (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    TextComponent text_10
      text [set every repeat] = $responseMsgMotive
      stopVal [duration (s)] = 2.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent text_11
      text [set every repeat] = $Eval
      stopVal [duration (s)] = 2.0
      pos = [0.7, 0]
      startVal [condition] = $t>=0 and Prediction=='True'
      letterHeight = 0.2
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.0
      pos = [-.7, 0]
      startVal [condition] = $t>=0 and Prediction=='False'
      nVertices = 90
      size [set every repeat] = [0.25, 0.25]
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    PolygonComponent polygon_6
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2.0
      pos [set every repeat] = [0.7, 0]
      startVal [condition] = $t>=0 and Prediction=='False'
      nVertices = 90
      size [set every repeat] = [0.25, 0.25]
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  Routine CueInstr
    ImageComponent PracCue
      units = pix
      startVal [time (s)] = 0.0
      image = stim/Smile_1.jpg
      size = [675,776]
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    TextComponent PracInstr
      wrapWidth = 1.5
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        When you see a face like this, you must indicate whether you think that person rated you highly.

        To practice, press 1 and indicate YES
    KeyboardComponent Practice_Response
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        allowable_keys = {
            '1': 'Yes',
            '2': 'No'
        }
      Begin Routine:
        practiceRsp = ' '
      Each Frame:
        if Practice_Response.keys:
            practiceRsp = allowable_keys[Practice_Response.keys]
    TextComponent PracRsp
      text [set every frame] = $practiceRsp
      pos = [-0.7, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent cont
      wrapWidth = 1.5
      text = Press the space bar to move on to the next trial
      pos = [0, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent contText
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent InstrText
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Participants at other study sites rated whether they liked you based on your picture.


        During this task, your job is to guess whether or not each person liked you. After that, you will be shown what they said.





        Press 'Yes' to see a demonstration.
    KeyboardComponent InstrContinue
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Motvation
    ImageComponent motivePhoto
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    TextComponent motiveText
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 1.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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  Routine SlowMotive
    TextComponent text_9
      text = Too Slow!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_8
      Each Frame:
        if cueResponse.keys:
            continueRoutine=False
            ensureResponse2.finished=True
  Routine Finished_
    TextComponent text_14
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any questions?




        Please let the experimenter know if you would like to try the practice again.
  Routine Slow2
  Routine Feedback
    ImageComponent PeerPhotoFeedback
      stopVal [time (s)] = 2.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size [set every repeat] = [676,777]
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    TextComponent peerEval
      text [set every frame] = $Eval
      stopVal [duration (s)] = 2.0
      pos = [.70, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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    TextComponent predictText
      text [set every repeat] = $responseMsg
      stopVal [duration (s)] = 2
      pos = [-0.7, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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  Routine CueMotive
    ImageComponent CueMotivePic
      stopVal [duration (s)] = 3.0
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $Cue
      size = [676,777]
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    KeyboardComponent cueResponse
      stopVal [time (s)] = 3.0
      forceEndRoutine = False
      allowedKeys = '1','2'
      startVal [time (s)] = 0.25
      store = first key
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    CodeComponent code_7
      Begin Routine:
        responseMsgMotive=''
      Each Frame:
        if cueResponse.keys:
            responseMsgMotive = allowable_keys[cueResponse.keys]
            Prediction='True'
        else:
            Prediction='False'
    TextComponent PredText
      text [set every frame] = $responseMsgMotive
      stopVal [duration (s)] = 3.0
      pos = [-0.7, 0]
      startVal [time (s)] = 0
      letterHeight = 0.2
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  Routine SlowFdbk2
    TextComponent text_36
      text = Too Slow!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_11
      Each Frame:
        if evalResponse2.keys:
            continueRoutine=False
            ensureConfirm2.finished=True

        if Condition=='Money':
            continueRoutine=False
            ensureConfirm2.finished=True

        if Condition=='Motivation' and motiveSuccess==False:
            continueRoutine=False
            ensureConfirm2.finished=True
  Routine MotivationDirections
    TextComponent text_8
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great job!

        Most trials you won't have to do anything to see your rating. However, on some trials you'll have to squeeze a gripper in order to see whether or not that person liked you.


        Let's practice with some cartoons.


        Press the space bar to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine PracticeMotiveDirections
    ImageComponent image_3
      pos = [0, -75]
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = stim/Smile_1.jpg
      size = [506,582]
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    TextComponent text_29
      stopVal [duration (s)] = 8.0
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Just like before, you will be shown a
        picture of a participant and guess
        whether they liked you.
    TextComponent text_28
      text = Yes
      pos = [-0.7, 0]
      startVal [time (s)] = 6.0
      letterHeight = 0.2
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    TextComponent text_39
      text = (Your guess)
      pos = [-0.7, -0.2]
      startVal [time (s)] = 6.0
      letterHeight = 0.06
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    TextComponent text_24
      wrapWidth = 1.7
      stopVal [time (s)] = 13
      pos = [0, 0.75]
      startVal [time (s)] = 8.0
      letterHeight = 0.07
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      text:
        On some trials, you will have to
        squeeze the gripper to see what
        the other person said.
    PolygonComponent polygon_4
      fillColor = $[-1,-1,-1]
      stopVal [time (s)] = 35
      pos = [0, 235]
      lineWidth = 15
      units = pix
      startVal [time (s)] = 8
      size = [675, 70]
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    PolygonComponent polygon_5
      fillColor = $[255,0,0]
      stopVal [time (s)] = 26
      pos = [0, 235]
      units = pix
      lineColor = $[255,0,0]
      startVal [time (s)] = 13
      size = [655, 45]
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    TextComponent text_19
      wrapWidth = 1.7
      stopVal [time (s)] = 20
      pos = [0.7, 0.5]
      startVal [time (s)] = 13
      letterHeight = 0.07
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      text:
        If you squeeze hard enough, you
        will be shown what they said.
    TextComponent text_27
      text = Yes
      stopVal [time (s)] = 26
      pos = [0.7, 0]
      startVal [time (s)] = 17
      letterHeight = 0.2
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    TextComponent text_40
      text = (What they said)
      stopVal [time (s)] = 26
      pos = [0.7, -0.2]
      startVal [time (s)] = 17
      letterHeight = 0.06
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    TextComponent text_26
      stopVal [time (s)] = 26
      pos = [0.7, -0.5]
      startVal [time (s)] = 20
      letterHeight = 0.07
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      text:
        Once again, press any key to
        confirm you've seen the rating.
    TextComponent text_25
      stopVal [time (s)] = 35
      pos = [0.7, 0.7]
      startVal [time (s)] = 26
      letterHeight = 0.07
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      text:
        If you do not squeeze the gripper
        hard enough, you will just see
        a circle.
    PolygonComponent polygon_2
      fillColor = $[1,1,1]
      pos = [20, 0]
      units = cm
      startVal [time (s)] = 30
      nVertices = 90
      size = [5, 5]
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    TextComponent text_30
      startVal [time (s)] = 35
      letterHeight = 0.1
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      text:
        Do you have any questions?











        Press the space bar to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine TrialsInstr
    TextComponent text_7
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great job!

        Now we will do the same thing, only this now we will do it a little faster.




        Press the space bar to continue.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine SlowFdbk
    TextComponent text_32
      text = Too Slow!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_10
      Each Frame:
        if evalResponse.keys:
            continueRoutine=False
            ensureConfirm.finished=True
  Routine spacebar
    TextComponent text_22
      wrapWidth = 1.7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        On some trials, you will have to squeeze a gripper in order to see what the other person said.

        If you do not squeeze the gripper hard enough, you will not be shown what they said and you will just see a circle.

        So, if you want to see what the other person said about you, make sure to squeeze the gripper as hard as you can.




        Press the space bar to continue.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine PracticeDirections
  Routine go
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/ShortSocaMotivePracticeEncodeConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'Cue': u'stim/Smile_1.jpg', u'CorrAns': 1, u'Eval': u'Yes'},
      {u'Cue': u'stim/Smile_2.jpg', u'CorrAns': 2, u'Eval': u'No'},
      {u'Cue': u'stim/Smile_3.jpg', u'CorrAns': 1, u'Eval': u'Yes'},
      {u'Cue': u'stim/Smile_4.jpg', u'CorrAns': 1, u'Eval': u'Yes'}]
    LoopInitiator ensureResponse loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      Routine Cue
      Routine Slow
    LoopTerminator ensureResponse
    Routine Motvation
    Routine Feedback
    Routine Cross
  LoopTerminator trials
  Routine AllInstructions
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = conditions/ShortSocaMotivePracticeEncodeConditions.xlsx
    loopType = sequential
    nReps = 0
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    Routine CueMotive
    Routine Motivation2
    Routine Feedback2
    Routine Cross
  LoopTerminator trials_4
  Routine Finished_
